PsychoPy2experiment version="2022.1.2"
Settings
  Experiment info = {'participant': '', 'age': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  color = 0.0000, 0.0000, 0.0000
  expName = Test_Shapes
  keyboardBackend = ioHub
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Routines
  Routine instructions
    TextComponent Instr_Test
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'SELEZIONA DUE IMMAGINI CON ' + str(title) + '\n\n Clicca lo schermo per vedere le immagini.'
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    MouseComponent Instr_Mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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  Routine NextInstruction
    TextComponent Next_Test
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = PROSSIMA ISTRUZIONE TRA 3 SECONDI
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  Routine images_Answer1
    ImageComponent image1
      image [set every repeat] = $image_1
      pos [set every repeat] = (posix_SideLeft, posiy_Up)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image2
      image [set every repeat] = $image_2
      pos [set every repeat] = (posix_CenterLeft, posiy_Up)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image3
      image [set every repeat] = $image_3
      pos [set every repeat] = (posix_CenterRight, posiy_Up)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image4
      image [set every repeat] = $image_4
      pos [set every repeat] = (posix_SideRight , posiy_Up)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image5
      image [set every repeat] = $image_5
      pos [set every repeat] = (posix_SideLeft, posiy_Down)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image6
      image [set every repeat] = $image_6
      pos [set every repeat] = (posix_CenterLeft, posiy_Down)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image7
      image [set every repeat] = $image_7
      pos [set every repeat] = (posix_CenterRight, posiy_Down)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image8
      image [set every repeat] = $image_8
      pos [set every repeat] = (posix_SideRight, posiy_Down)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    MouseComponent answer
      clickable = image1, image2, image3, image4, image5, image6, image7, image8
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      syncScreenRefresh = True
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    TextComponent countdown1
      letterHeight = 0.10
      pos = (0.7, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every frame] = $round(20.0 - t, 1)
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  Routine images_Answer2
    ImageComponent image1_3
      image [set every repeat] = $image_1
      pos [set every repeat] = (posix_SideLeft, posiy_Up)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image2_3
      image [set every repeat] = $image_2
      pos [set every repeat] = (posix_CenterLeft, posiy_Up)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image3_3
      image [set every repeat] = $image_3
      pos [set every repeat] = (posix_CenterRight, posiy_Up)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image4_3
      image [set every repeat] = $image_4
      pos [set every repeat] = (posix_SideRight , posiy_Up)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image5_3
      image [set every repeat] = $image_5
      pos [set every repeat] = (posix_SideLeft, posiy_Down)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image6_3
      image [set every repeat] = $image_6
      pos [set every repeat] = (posix_CenterLeft, posiy_Down)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image7_3
      image [set every repeat] = $image_7
      pos [set every repeat] = (posix_CenterRight, posiy_Down)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image8_3
      image [set every repeat] = $image_8
      pos [set every repeat] = (posix_SideRight, posiy_Down)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    MouseComponent answer_3
      clickable = image1, image2, image3, image4, image5, image6, image7, image8
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      syncScreenRefresh = True
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    ImageComponent imageSelected
      image = images/Selected.png
      opacity = 0.5
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent countdown2
      letterHeight = 0.1
      pos = (0.7, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every frame] = $round(20.0 - t, 1)
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    CodeComponent Image_Score
      Code Type = Auto->JS
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      Begin Routine:
        if answer.clicked_name:
            if answer.clicked_name[-1] == "image1":
                posriqx=posix_SideLeft
                posreqy=posiy_Up
            elif answer.clicked_name[-1]== "image2":
                posriqx=posix_CenterLeft
                posreqy=posiy_Up
            elif answer.clicked_name[-1] == "image3":
                posriqx=posix_CenterRight
                posreqy=posiy_Up
            elif answer.clicked_name[-1] == "image4":
                posriqx=posix_SideRight
                posreqy=posiy_Up
            elif answer.clicked_name[-1] == "image5":
                posriqx=posix_SideLeft
                posreqy=posiy_Down
            elif answer.clicked_name[-1]== "image6":
                posriqx=posix_CenterLeft
                posreqy=posiy_Down
            elif answer.clicked_name[-1] == "image7":
                posriqx=posix_CenterRight
                posreqy=posiy_Down
            elif answer.clicked_name[-1] == "image8":
                posriqx=posix_SideRight
                posreqy=posiy_Down
        else:
            posriqx=0.7
            posreqy=0

        imageSelected.setPos((posriqx, posreqy))
      End Routine:
        if (answer.clicked_name and answer_3.clicked_name):
            if((answer.clicked_name[-1]==correct_Answer1 or answer.clicked_name[-1]==correct_Answer2) and (answer_3.clicked_name[-1]==correct_Answer1 or answer_3.clicked_name[-1]==correct_Answer2)):
                trials.addData('score', 1)
            else:
                trials.addData('score', 0)
        else:
            trials.addData('score', -1)
  Routine InitialInstruction
    TextComponent TxtInitInstr
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        IL TEST PREVEDE DIVERSE SCHERMATE:

        NELLA PRIMA VIENE MOSTRATA UN'ISTRUZIONE, DA LEGGERE ATTENTAMENTE E RICORDARE;

        NELLA SECONDA VENGONO MOSTRATE OTTO IMMAGINI TRA CUI SELEZIONARE QUELLE CHE CORRISPONDONO ALL'ISTRUZIONE LETTA PRECEDENTEMENTE.

        Clicca qualsiasi parte dello schermo per proseguire.
    MouseComponent NextInitIstr
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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  Routine InstProva
    MouseComponent NextIstrProva
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    TextComponent TxtIstrProva
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        SEGUE UNA SESSIONE DI PROVA PER PERMETTERTI DI PRENDERE CONFIDENZA CON IL TEST.

        LE SETTE ISTRUZIONI CHE LEGGERAI SARANNO LE STESSE DEL TEST VERO E PROPRIO COSI' DA AIUTARTI!

        Clicca qualsiasi parte dello schermo per proseguire.
  Routine StartTest
    TextComponent Txt_Start
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        COMPLIMENTI!
        HAI COMPLETATO LA FASE DI PROVA,
        ORA INIZIA IL TEST!

        IL TEST E' COMPOSTO DA DODICI DOMANDE.

        Clicca qualsiasi parte dello schermo per proseguire
    MouseComponent Next_Start
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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  Routine image_Answer2Prova
    ImageComponent image1_4
      image [set every repeat] = $image_1
      pos [set every repeat] = (posix_SideLeft, posiy_Up)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 20
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    ImageComponent image2_4
      image [set every repeat] = $image_2
      pos [set every repeat] = (posix_CenterLeft, posiy_Up)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image3_4
      image [set every repeat] = $image_3
      pos [set every repeat] = (posix_CenterRight, posiy_Up)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image4_4
      image [set every repeat] = $image_4
      pos [set every repeat] = (posix_SideRight , posiy_Up)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image5_4
      image [set every repeat] = $image_5
      pos [set every repeat] = (posix_SideLeft, posiy_Down)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image6_4
      image [set every repeat] = $image_6
      pos [set every repeat] = (posix_CenterLeft, posiy_Down)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image7_4
      image [set every repeat] = $image_7
      pos [set every repeat] = (posix_CenterRight, posiy_Down)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image8_4
      image [set every repeat] = $image_8
      pos [set every repeat] = (posix_SideRight, posiy_Down)
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    MouseComponent answer_4
      clickable = image1, image2, image3, image4, image5, image6, image7, image8
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      syncScreenRefresh = True
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    ImageComponent imageSelected_2
      image = images/Opacity.png
      opacity = 0.5
      saveStartStop = False
      size [set every repeat] = (size_x, size_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent countdown2_2
      letterHeight = 0.1
      pos = (0.7, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every frame] = $round(20.0 - t, 1)
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    CodeComponent Image_Score_2
      Code Type = Auto->JS
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      Begin Routine:
        if answer.clicked_name:
            if answer.clicked_name[-1] == "image1":
                posriqx=posix_SideLeft
                posreqy=posiy_Up
            elif answer.clicked_name[-1]== "image2":
                posriqx=posix_CenterLeft
                posreqy=posiy_Up
            elif answer.clicked_name[-1] == "image3":
                posriqx=posix_CenterRight
                posreqy=posiy_Up
            elif answer.clicked_name[-1] == "image4":
                posriqx=posix_SideRight
                posreqy=posiy_Up
            elif answer.clicked_name[-1] == "image5":
                posriqx=posix_SideLeft
                posreqy=posiy_Down
            elif answer.clicked_name[-1]== "image6":
                posriqx=posix_CenterLeft
                posreqy=posiy_Down
            elif answer.clicked_name[-1] == "image7":
                posriqx=posix_CenterRight
                posreqy=posiy_Down
            elif answer.clicked_name[-1] == "image8":
                posriqx=posix_SideRight
                posreqy=posiy_Down
        else:
            posriqx=0.7
            posreqy=0

        imageSelected_2.setPos((posriqx, posreqy))
      End Routine:
        if (answer.clicked_name and answer_4.clicked_name):
            if((answer.clicked_name[-1]==correct_Answer1 or answer.clicked_name[-1]==correct_Answer2) and (answer_4.clicked_name[-1]==correct_Answer1 or answer_4.clicked_name[-1]==correct_Answer2)):
                trials_2.addData('score', 1)
            else:
                trials_2.addData('score', 0)
        else:
                trials_2.addData('score', -1)
  Routine InitialInstruction2
    TextComponent TxtInitInstr_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        UNA VOLTA SELEZIONATA LA PRIMA RISPOSTA QUESTA VERRA' EVIDENZIATA.

        LE RISPOSTE DATE NON POSSONO ESSERE MODIFICATE.

        IL TEMPO DI SELEZIONE E' DI 20 SECONDI PER OGNI IMMAGINE.
        SE NON VIENE DATA RISPOSTA, IL TEST PROSEGUE RIQUADRANDO IL TIMER.

        Clicca qualsiasi parte dello schermo per proseguire.
    MouseComponent NextInitIstr_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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  Routine FineTest
    TextComponent Txt_Fine
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        FINE TEST

        GRAZIE PER AVER PARTECIPATO!
  Routine Incoraggiamento
    TextComponent IncoText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        GRAZIE PER SVOLGERE QUESTO TEST!
        IL TUO CONTRIBUTO E' IMPORTANTE!

        Clicca qualsiasi parte dello schermo per proseguire.
    MouseComponent IncoMouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine InstrProva_2
    TextComponent IncoText_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ANCHE SE LE ISTRUZIONI SEMBRANO TANTE,
        NON TI SCORAGGIARE!

        Clicca qualsiasi parte dello schermo per proseguire.
    MouseComponent IncoMouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Attention
    TextComponent txtAtt
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        !!!!!ATTENZIONE!!!!!
        NON CLICCARE LA STESSA IMMAGINE DUE VOLTE!

        Clicca qualsiasi parte dello schermo per proseguire.
    MouseComponent MouseAtt
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine Incoraggiamento
  Routine InitialInstruction
  Routine InitialInstruction2
  Routine Attention
  Routine InstrProva_2
  Routine InstProva
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = condProva.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image_1': 'images/Trial_Prova_StessaForma/carta1.png', 'image_2': 'images/Trial_Prova_StessaForma/carta2.png', 'image_3': 'images/Trial_Prova_StessaForma/carta3.png', 'image_4': 'images/Trial_Prova_StessaForma/carta4.png', 'image_5': 'images/Trial_Prova_StessaForma/carta5.png', 'image_6': 'images/Trial_Prova_StessaForma/carta6.png', 'image_7': 'images/Trial_Prova_StessaForma/carta7.png', 'image_8': 'images/Trial_Prova_StessaForma/carta8.png', 'posix_SideLeft': -0.6, 'posix_CenterLeft': -0.3, 'posix_SideRight': 0.3, 'posix_CenterRight': 0, 'posiy_Down': -0.2, 'posiy_Up': 0.2, 'size_x': 0.24,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,
      {'image_1': 'images/Trial_Prova_StessaPosizione/carta1.png', 'image_2': 'images/Trial_Prova_StessaPosizione/carta2.png', 'image_3': 'images/Trial_Prova_StessaPosizione/carta3.png', 'image_4': 'images/Trial_Prova_StessaPosizione/carta4.png', 'image_5': 'images/Trial_Prova_StessaPosizione/carta5.png', 'image_6': 'images/Trial_Prova_StessaPosizione/carta6.png', 'image_7': 'images/Trial_Prova_StessaPosizione/carta7.png', 'image_8': 'images/Trial_Prova_StessaPosizione/carta8.png', 'posix_SideLeft': -0.6, 'posix_CenterLeft': -0.3, 'posix_SideRight': 0.3, 'posix_CenterRight': 0, 'posiy_Down': -0.2, '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,
      {'image_1': 'images/Trial_Prova_StessaPosizioneForma/carta1.png', 'image_2': 'images/Trial_Prova_StessaPosizioneForma/carta2.png', 'image_3': 'images/Trial_Prova_StessaPosizioneForma/carta3.png', 'image_4': 'images/Trial_Prova_StessaPosizioneForma/carta4.png', 'image_5': 'images/Trial_Prova_StessaPosizioneForma/carta5.png', 'image_6': 'images/Trial_Prova_StessaPosizioneForma/carta6.png', 'image_7': 'images/Trial_Prova_StessaPosizioneForma/carta7.png', 'image_8': 'images/Trial_Prova_StessaPosizioneForma/carta8.png', 'posix_SideLeft': -0.6, 'posix_CenterLeft': -0.3, 'posix_SideRight': 0.3, 'posi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,
      {'image_1': 'images/Trial_Prova_DiversoNumeroStessaforme/carta1.png', 'image_2': 'images/Trial_Prova_DiversoNumeroStessaforme/carta2.png', 'image_3': 'images/Trial_Prova_DiversoNumeroStessaforme/carta3.png', 'image_4': 'images/Trial_Prova_DiversoNumeroStessaforme/carta4.png', 'image_5': 'images/Trial_Prova_DiversoNumeroStessaforme/carta5.png', 'image_6': 'images/Trial_Prova_DiversoNumeroStessaforme/carta6.png', 'image_7': 'images/Trial_Prova_DiversoNumeroStessaforme/carta7.png', 'image_8': 'images/Trial_Prova_DiversoNumeroStessaforme/carta8.png', 'posix_SideLeft': -0.6, 'posix_CenterLeft': -0.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
    Routine instructions
    Routine images_Answer1
    Routine image_Answer2Prova
    Routine NextInstruction
  LoopTerminator trials_2
  Routine StartTest
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image_1': 'images/Trial_StessaForma/carta1.png', 'image_2': 'images/Trial_StessaForma/carta2.png', 'image_3': 'images/Trial_StessaForma/carta3.png', 'image_4': 'images/Trial_StessaForma/carta4.png', 'image_5': 'images/Trial_StessaForma/carta5.png', 'image_6': 'images/Trial_StessaForma/carta6.png', 'image_7': 'images/Trial_StessaForma/carta7.png', 'image_8': 'images/Trial_StessaForma/carta8.png', 'posix_SideLeft': -0.6, 'posix_CenterLeft': -0.3, 'posix_SideRight': 0.3, 'posix_CenterRight': 0, 'posiy_Down': -0.2, 'posiy_Up': 0.2, 'size_x': 0.24, 'size_y': 0.32, 'title': 'LA STESSA FORMA ', 'c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,
      {'image_1': 'images/Trial_StessaPosizione/carta1.png', 'image_2': 'images/Trial_StessaPosizione/carta2.png', 'image_3': 'images/Trial_StessaPosizione/carta3.png', 'image_4': 'images/Trial_StessaPosizione/carta4.png', 'image_5': 'images/Trial_StessaPosizione/carta5.png', 'image_6': 'images/Trial_StessaPosizione/carta6.png', 'image_7': 'images/Trial_StessaPosizione/carta7.png', 'image_8': 'images/Trial_StessaPosizione/carta8.png', 'posix_SideLeft': -0.6, 'posix_CenterLeft': -0.3, 'posix_SideRight': 0.3, 'posix_CenterRight': 0, 'posiy_Down': -0.2, 'posiy_Up': 0.2, 'size_x': 0.24, 'size_y': 0.32, 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,
      {'image_1': 'images/Trial_StessaPosizioneForma/carta1.png', 'image_2': 'images/Trial_StessaPosizioneForma/carta2.png', 'image_3': 'images/Trial_StessaPosizioneForma/carta3.png', 'image_4': 'images/Trial_StessaPosizioneForma/carta4.png', 'image_5': 'images/Trial_StessaPosizioneForma/carta5.png', 'image_6': 'images/Trial_StessaPosizioneForma/carta6.png', 'image_7': 'images/Trial_StessaPosizioneForma/carta7.png', 'image_8': 'images/Trial_StessaPosizioneForma/carta8.png', 'posix_SideLeft': -0.6, 'posix_CenterLeft': -0.3, 'posix_SideRight': 0.3, 'posix_CenterRight': 0, 'posiy_Down': -0.2, 'posiy_Up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,
      {'image_1': 'images/Trial_StessaQuantita/carta1.png', 'image_2': 'images/Trial_StessaQuantita/carta2.png', 'image_3': 'images/Trial_StessaQuantita/carta3.png', 'image_4': 'images/Trial_StessaQuantita/carta4.png', 'image_5': 'images/Trial_StessaQuantita/carta5.png', 'image_6': 'images/Trial_StessaQuantita/carta6.png', 'image_7': 'images/Trial_StessaQuantita/carta7.png', 'image_8': 'images/Trial_StessaQuantita/carta8.png', 'posix_SideLeft': -0.6, 'posix_CenterLeft': -0.3, 'posix_SideRight': 0.3, 'posix_CenterRight': 0, 'posiy_Down': -0.2, 'posiy_Up': 0.2, 'size_x': 0.24, 'size_y': 0.32, 'title':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
    Routine instructions
    Routine images_Answer1
    Routine images_Answer2
    Routine NextInstruction
  LoopTerminator trials
  Routine FineTest
